<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:imgui="clr-namespace:Bonsai.ImGui;assembly=Bonsai.ImGui"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:imviz="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FrameSubject" />
        <Property Name="CameraName" />
        <Property Name="MinSaturation" />
        <Property Name="MaxSaturation" />
        <Property Name="FlipState" />
        <Property Name="Rotation" />
        <Property Name="TriggeredCamerasStream" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CameraPreview</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="FrameSubject" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="imgui:TableBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Columns>1</imgui:Columns>
              <imgui:Flags>None</imgui:Flags>
              <imgui:OuterSize>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:OuterSize>
              <imgui:InnerWidth>0</imgui:InnerWidth>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Table</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="TriggeredCamerasStream" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasStream</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CameraName" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>SideCamera</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraStream</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Table</Name>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraStream</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OverlayAlpha</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Alpha" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MinSaturation" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MaxSaturation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SaturationThreshold">
                <p1:MinSaturation>53</p1:MinSaturation>
                <p1:MaxSaturation>215</p1:MaxSaturation>
                <p1:Alpha>0.5</p1:Alpha>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="FlipState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Flipped</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Mode" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>NotFlipped</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
 it.Size.Width / 2 as X,
 it.Size.Height / 2 as Y
)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2f">
                <cv:X>320</cv:X>
                <cv:Y>240</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Pivot" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Rotation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:AffineTransform">
                <cv:Pivot>
                  <cv:X>320</cv:X>
                  <cv:Y>240</cv:Y>
                </cv:Pivot>
                <cv:Translation>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Translation>
                <cv:Rotation>0</cv:Rotation>
                <cv:Scale>
                  <cv:X>1</cv:X>
                  <cv:Y>1</cv:Y>
                </cv:Scale>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Transform" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpAffine">
                <cv:Transform>1,0,0;0,1,0</cv:Transform>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="imviz:SampleOnNewFrame">
              <Name>Table</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="imviz:StoreImage">
                <imviz:InternalFormat>Rgba</imviz:InternalFormat>
                <imviz:WrapS>Repeat</imviz:WrapS>
                <imviz:WrapT>Repeat</imviz:WrapT>
                <imviz:MinFilter>Linear</imviz:MinFilter>
                <imviz:MagFilter>Linear</imviz:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Image" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="imgui:ImageBuilder">
              <imgui:Name>PreviewImage</imgui:Name>
              <imgui:Visible>true</imgui:Visible>
              <imgui:ImageSize>
                <imgui:X>320</imgui:X>
                <imgui:Y>320</imgui:Y>
              </imgui:ImageSize>
              <imgui:UV0>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:UV0>
              <imgui:UV1>
                <imgui:X>1</imgui:X>
                <imgui:Y>1</imgui:Y>
              </imgui:UV1>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Table</Name>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TableBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Columns>1</imgui:Columns>
              <imgui:Flags>None</imgui:Flags>
              <imgui:OuterSize>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:OuterSize>
              <imgui:InnerWidth>0</imgui:InnerWidth>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TableBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Columns>2</imgui:Columns>
              <imgui:Flags>None</imgui:Flags>
              <imgui:OuterSize>
                <imgui:X>0</imgui:X>
                <imgui:Y>0</imgui:Y>
              </imgui:OuterSize>
              <imgui:InnerWidth>0</imgui:InnerWidth>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:TextBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Text>Alpha</imgui:Text>
            </Expression>
            <Expression xsi:type="imgui:TableNextColumnBuilder">
              <imgui:Visible>true</imgui:Visible>
            </Expression>
            <Expression xsi:type="imgui:SliderFloatBuilder">
              <imgui:Visible>true</imgui:Visible>
              <imgui:Min>0</imgui:Min>
              <imgui:Max>1</imgui:Max>
              <imgui:Flags>None</imgui:Flags>
              <imgui:InitialValue>0.5</imgui:InitialValue>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OverlayAlpha</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="43" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="20" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="20" Label="Source2" />
            <Edge From="18" To="20" Label="Source3" />
            <Edge From="19" To="20" Label="Source4" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="20" To="32" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="23" To="29" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="25" To="28" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="31" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="39" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source2" />
            <Edge From="43" To="55" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="48" To="51" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="54" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source2" />
            <Edge From="54" To="55" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>