<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:imgui="clr-namespace:Bonsai.ImGui;assembly=Bonsai.ImGui"
                 xmlns:implot="clr-namespace:Bonsai.ImPlot;assembly=Bonsai.ImPlot"
                 xmlns:imviz="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\Aind.Behavior.DynamicForaging\local\DynamicForaging_AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>c:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>c:\git\Aind.Behavior.DynamicForaging\local\Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateRuntime">
                <py:PythonHome>../.venv</py:PythonHome>
                <py:ScriptPath>./Extensions\bonsai.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsWaveformUploadDone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateAutoWaterState">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GlobalAutoWaterState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialOutcome">
              <rx:Name>GlobalTrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>GlobalTrial</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialMetrics">
              <rx:Name>GlobalTrialMetrics</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BiasOffsetBounds</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="28" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="28" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source3" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartupLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>IsWaveformUploadDone</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskEngine.bonsai" />
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>isNull</scr:Name>
        <scr:Expression>it == null</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Visualizer">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ui:VisualizerWindow">
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ImGuiContext</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DataTransformations</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrialOutcome</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimedTrial</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTrialMetrics</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Bias</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (it as Bias)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimedBias</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickRight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickLeft</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>LickRight</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsRightLickEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>LickLeft</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GiveRewardRight</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>WaterRight</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GiveRewardRight</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:CreateSoftwareEvent">
                      <p5:EventName>WaterLeft</p5:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:TimestampSoftwareEvent" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:AccumulateToImmutableList" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>EthogramEvents</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="30" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="30" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="30" Label="Source3" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="30" Label="Source4" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source5" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OutputControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Single">
                    <rx:Name>UiHabituationTimeUpdate</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiMoveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiGiveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiGiveLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiMoveRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiKeepLeftOpen</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiKeepRightOpen</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiKeepBothOpen</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiDrainLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiDrainRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiDrainBoth</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorForwardLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorForwardRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorUp</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorBackRight</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorBackLeft</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorDown</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorStop</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorHome</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Unit">
                    <rx:Name>UiManipulatorInitialize</rx:Name>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VisualizerStructure</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="FrameSubject" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>2</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>None</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Behavior</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Bias</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Ethogram</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Camera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TableBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Columns>1</imgui:Columns>
                    <imgui:Flags>Borders</imgui:Flags>
                    <imgui:OuterSize>
                      <imgui:X>0</imgui:X>
                      <imgui:Y>0</imgui:Y>
                    </imgui:OuterSize>
                    <imgui:InnerWidth>0</imgui:InnerWidth>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TableNextColumnBuilder">
                    <imgui:Visible>true</imgui:Visible>
                  </Expression>
                  <Expression xsi:type="imgui:TabBarBuilder">
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Name>PreSession</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>pre-session</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PreSession</Name>
                  </Expression>
                  <Expression xsi:type="imgui:TabItemBuilder">
                    <imgui:Name>InterSession</imgui:Name>
                    <imgui:Visible>true</imgui:Visible>
                    <imgui:Text>inter-session</imgui:Text>
                    <imgui:Flags>None</imgui:Flags>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>InterSession</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="16" Label="Source1" />
                  <Edge From="1" To="19" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="13" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source3" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="25" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source3" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BehaviorVisualizer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PlotName" />
                    <Property Name="LickLeftSubject" />
                    <Property Name="LickRightSubject" />
                    <Property Name="TrialSubject" />
                    <Property Name="FrameSubject" />
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>BehaviorPlot</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="FrameSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Behavior</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="PlotName" />
                        </Expression>
                        <Expression xsi:type="imgui:TableBuilder">
                          <imgui:Name>Behavior1</imgui:Name>
                          <imgui:Visible>true</imgui:Visible>
                          <imgui:Columns>1</imgui:Columns>
                          <imgui:Flags>None</imgui:Flags>
                          <imgui:OuterSize>
                            <imgui:X>0</imgui:X>
                            <imgui:Y>0</imgui:Y>
                          </imgui:OuterSize>
                          <imgui:InnerWidth>0</imgui:InnerWidth>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="implot:PlotBuilder">
                          <implot:Name>EventPlot</implot:Name>
                          <implot:Visible>true</implot:Visible>
                          <implot:Size>
                            <implot:X>-1</implot:X>
                            <implot:Y>150</implot:Y>
                          </implot:Size>
                          <implot:Flags>NoTitle</implot:Flags>
                          <implot:FlagsX>AutoFit</implot:FlagsX>
                          <implot:FlagsY>RangeFit</implot:FlagsY>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>EventPlot</Name>
                        </Expression>
                        <Expression xsi:type="imgui:TableNextColumnBuilder">
                          <imgui:Visible>true</imgui:Visible>
                        </Expression>
                        <Expression xsi:type="implot:PlotBuilder">
                          <implot:Name>ContinuousPlot</implot:Name>
                          <implot:Visible>true</implot:Visible>
                          <implot:Size>
                            <implot:X>-1</implot:X>
                            <implot:Y>150</implot:Y>
                          </implot:Size>
                          <implot:Flags>NoTitle</implot:Flags>
                          <implot:FlagsX>AutoFit</implot:FlagsX>
                          <implot:FlagsY>None</implot:FlagsY>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>ContinuousPlot</Name>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>EventPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:PlotStyling">
                            <p2:TickPositions>
                              <p2:double>0</p2:double>
                              <p2:double>1</p2:double>
                            </p2:TickPositions>
                            <p2:TickLabels>
                              <p2:string>R</p2:string>
                              <p2:string>L</p2:string>
                            </p2:TickLabels>
                            <p2:ImPlotLocationFlags>West</p2:ImPlotLocationFlags>
                            <p2:ImPlotLegendFlags>None</p2:ImPlotLegendFlags>
                            <p2:YAxisMax xsi:nil="true" />
                            <p2:YAxisMin xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>ContinuousPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:PlotStyling">
                            <p2:TickPositions>
                              <p2:double>0</p2:double>
                              <p2:double>1</p2:double>
                            </p2:TickPositions>
                            <p2:TickLabels />
                            <p2:ImPlotLocationFlags>West</p2:ImPlotLocationFlags>
                            <p2:ImPlotLegendFlags>None</p2:ImPlotLegendFlags>
                            <p2:YAxisMax xsi:nil="true" />
                            <p2:YAxisMin xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="LickLeftSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LickLeft</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.9</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(it as LickLeft)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="imviz:RollingBufferBuilder">
                          <imviz:Capacity>1000</imviz:Capacity>
                          <imviz:IndexSelector>Item2</imviz:IndexSelector>
                          <imviz:ValueSelector>Item1.LickLeft</imviz:ValueSelector>
                        </Expression>
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>EventPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:ScatterStyling">
                            <p2:ImPlotMarker>Square</p2:ImPlotMarker>
                            <p2:Size>3</p2:Size>
                            <p2:FillColorR>0</p2:FillColorR>
                            <p2:FillColorG>0</p2:FillColorG>
                            <p2:FillColorB>0</p2:FillColorB>
                            <p2:FillColorA>1</p2:FillColorA>
                            <p2:OutlineColorR>0</p2:OutlineColorR>
                            <p2:OutlineColorG>0</p2:OutlineColorG>
                            <p2:OutlineColorB>0</p2:OutlineColorB>
                            <p2:OutlineColorA>1</p2:OutlineColorA>
                            <p2:OutlineWeight>1</p2:OutlineWeight>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="imviz:PlotScatterSeriesBuilder">
                          <imviz:Visible>true</imviz:Visible>
                          <imviz:Flags>None</imviz:Flags>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="LickRightSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LickRight</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(it as LickRight)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="imviz:RollingBufferBuilder">
                          <imviz:Capacity>1000</imviz:Capacity>
                          <imviz:IndexSelector>Item2</imviz:IndexSelector>
                          <imviz:ValueSelector>Item1.LickRight</imviz:ValueSelector>
                        </Expression>
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>EventPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:ScatterStyling">
                            <p2:ImPlotMarker>Square</p2:ImPlotMarker>
                            <p2:Size>3</p2:Size>
                            <p2:FillColorR>0</p2:FillColorR>
                            <p2:FillColorG>0</p2:FillColorG>
                            <p2:FillColorB>0</p2:FillColorB>
                            <p2:FillColorA>1</p2:FillColorA>
                            <p2:OutlineColorR>0</p2:OutlineColorR>
                            <p2:OutlineColorG>0</p2:OutlineColorG>
                            <p2:OutlineColorB>0</p2:OutlineColorB>
                            <p2:OutlineColorA>1</p2:OutlineColorA>
                            <p2:OutlineWeight>1</p2:OutlineWeight>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="imviz:PlotScatterSeriesBuilder">
                          <imviz:Visible>true</imviz:Visible>
                          <imviz:Flags>None</imviz:Flags>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="TrialSubject" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TimedTrial</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:CategorizeTrial" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.ChoiceCategory</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>NoChoice</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Choice">
                                  <Value>NoChoice</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.5</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>LeftChoice</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Choice">
                                  <Value>LeftChoice</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.85</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>RightChoice</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Choice">
                                  <Value>RightChoice</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.15</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new (
  it as Choice
)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="imviz:RollingBufferBuilder">
                          <imviz:Capacity>1000</imviz:Capacity>
                          <imviz:IndexSelector>Seconds</imviz:IndexSelector>
                          <imviz:ValueSelector>Value.Choice</imviz:ValueSelector>
                        </Expression>
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>EventPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:ScatterStyling">
                            <p2:ImPlotMarker>Circle</p2:ImPlotMarker>
                            <p2:Size>3</p2:Size>
                            <p2:FillColorR>0</p2:FillColorR>
                            <p2:FillColorG>0</p2:FillColorG>
                            <p2:FillColorB>0</p2:FillColorB>
                            <p2:FillColorA>0</p2:FillColorA>
                            <p2:OutlineColorR>0</p2:OutlineColorR>
                            <p2:OutlineColorG>1</p2:OutlineColorG>
                            <p2:OutlineColorB>0</p2:OutlineColorB>
                            <p2:OutlineColorA>1</p2:OutlineColorA>
                            <p2:OutlineWeight>1</p2:OutlineWeight>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="imviz:PlotScatterSeriesBuilder">
                          <imviz:Visible>true</imviz:Visible>
                          <imviz:Flags>None</imviz:Flags>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.TrialCategory</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>LeftRewarded</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Category">
                                  <Value>LeftRewarded</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.8</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>RightRewarded</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Category">
                                  <Value>RightRewarded</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>0.2</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new (
  it as Choice
)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="imviz:RollingBufferBuilder">
                          <imviz:Capacity>1000</imviz:Capacity>
                          <imviz:IndexSelector>Seconds</imviz:IndexSelector>
                          <imviz:ValueSelector>Value.Choice</imviz:ValueSelector>
                        </Expression>
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>EventPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:ScatterStyling">
                            <p2:ImPlotMarker>Circle</p2:ImPlotMarker>
                            <p2:Size>3</p2:Size>
                            <p2:FillColorR>0</p2:FillColorR>
                            <p2:FillColorG>1</p2:FillColorG>
                            <p2:FillColorB>0</p2:FillColorB>
                            <p2:FillColorA>1</p2:FillColorA>
                            <p2:OutlineColorR>0</p2:OutlineColorR>
                            <p2:OutlineColorG>1</p2:OutlineColorG>
                            <p2:OutlineColorB>0</p2:OutlineColorB>
                            <p2:OutlineColorA>1</p2:OutlineColorA>
                            <p2:OutlineWeight>1</p2:OutlineWeight>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="imviz:PlotScatterSeriesBuilder">
                          <imviz:Visible>true</imviz:Visible>
                          <imviz:Flags>None</imviz:Flags>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TimedTrial</Name>
                        </Expression>
                        <Expression xsi:type="imviz:RollingBufferBuilder">
                          <imviz:Capacity>1000</imviz:Capacity>
                          <imviz:IndexSelector>Seconds</imviz:IndexSelector>
                          <imviz:ValueSelector>Value.Trial.Metadata.PRewardLeft</imviz:ValueSelector>
                        </Expression>
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>ContinuousPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:LineStyling">
                            <p2:ColorR>1</p2:ColorR>
                            <p2:ColorG>0</p2:ColorG>
                            <p2:ColorB>0</p2:ColorB>
                            <p2:ColorA>1</p2:ColorA>
                            <p2:LineThickness>2</p2:LineThickness>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="imviz:PlotLineSeriesBuilder">
                          <imviz:Visible>true</imviz:Visible>
                          <imviz:Flags>None</imviz:Flags>
                        </Expression>
                        <Expression xsi:type="imviz:RollingBufferBuilder">
                          <imviz:Capacity>1000</imviz:Capacity>
                          <imviz:IndexSelector>Seconds</imviz:IndexSelector>
                          <imviz:ValueSelector>Value.Trial.Metadata.PRewardRight</imviz:ValueSelector>
                        </Expression>
                        <Expression xsi:type="imviz:LatestOnNewFrame">
                          <Name>ContinuousPlot</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:LineStyling">
                            <p2:ColorR>0</p2:ColorR>
                            <p2:ColorG>0</p2:ColorG>
                            <p2:ColorB>1</p2:ColorB>
                            <p2:ColorA>1</p2:ColorA>
                            <p2:LineThickness>2</p2:LineThickness>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="imviz:PlotLineSeriesBuilder">
                          <imviz:Visible>true</imviz:Visible>
                          <imviz:Flags>None</imviz:Flags>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="7" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="17" To="21" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="22" Label="Source1" />
                        <Edge From="21" To="22" Label="Source2" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="28" To="32" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="33" Label="Source1" />
                        <Edge From="32" To="33" Label="Source2" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                        <Edge From="38" To="39" Label="Source1" />
                        <Edge From="38" To="70" Label="Source1" />
                        <Edge From="39" To="40" Label="Source1" />
                        <Edge From="39" To="50" Label="Source1" />
                        <Edge From="40" To="41" Label="Source1" />
                        <Edge From="40" To="57" Label="Source1" />
                        <Edge From="41" To="42" Label="Source1" />
                        <Edge From="41" To="44" Label="Source1" />
                        <Edge From="41" To="46" Label="Source1" />
                        <Edge From="42" To="43" Label="Source1" />
                        <Edge From="43" To="48" Label="Source1" />
                        <Edge From="44" To="45" Label="Source1" />
                        <Edge From="45" To="48" Label="Source2" />
                        <Edge From="46" To="47" Label="Source1" />
                        <Edge From="47" To="48" Label="Source3" />
                        <Edge From="48" To="49" Label="Source1" />
                        <Edge From="49" To="51" Label="Source1" />
                        <Edge From="50" To="51" Label="Source2" />
                        <Edge From="50" To="64" Label="Source2" />
                        <Edge From="51" To="52" Label="Source1" />
                        <Edge From="52" To="53" Label="Source1" />
                        <Edge From="53" To="54" Label="Source1" />
                        <Edge From="54" To="55" Label="Source1" />
                        <Edge From="55" To="56" Label="Source1" />
                        <Edge From="57" To="58" Label="Source1" />
                        <Edge From="57" To="60" Label="Source1" />
                        <Edge From="58" To="59" Label="Source1" />
                        <Edge From="59" To="62" Label="Source1" />
                        <Edge From="60" To="61" Label="Source1" />
                        <Edge From="61" To="62" Label="Source2" />
                        <Edge From="62" To="63" Label="Source1" />
                        <Edge From="63" To="64" Label="Source1" />
                        <Edge From="64" To="65" Label="Source1" />
                        <Edge From="65" To="66" Label="Source1" />
                        <Edge From="66" To="67" Label="Source1" />
                        <Edge From="67" To="68" Label="Source1" />
                        <Edge From="68" To="69" Label="Source1" />
                        <Edge From="70" To="71" Label="Source1" />
                        <Edge From="70" To="75" Label="Source1" />
                        <Edge From="71" To="72" Label="Source1" />
                        <Edge From="72" To="73" Label="Source1" />
                        <Edge From="73" To="74" Label="Source1" />
                        <Edge From="75" To="76" Label="Source1" />
                        <Edge From="76" To="77" Label="Source1" />
                        <Edge From="77" To="78" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BiasVisualizer.bonsai">
              <FrameSubject>Bias</FrameSubject>
              <TimedBias>TimedBias</TimedBias>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Ethogram</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EthogramEvents</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SoftwareEvents" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SoftwareEventVisualizer">
                <p2:Visible>true</p2:Visible>
                <p2:SoftwareEvents />
                <p2:TrialBreakEventName>Break</p2:TrialBreakEventName>
                <p2:PlotHeight>200</p2:PlotHeight>
                <p2:ShadedAreaPlotters>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>QuiescentPeriod</p2:EventName>
                    <p2:Color>Gold</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>ResponsePeriod</p2:EventName>
                    <p2:Color>SandyBrown</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>RewardConsumptionPeriod</p2:EventName>
                    <p2:Color>RosyBrown</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                  <p2:ShadedAreaPlotter>
                    <p2:EventName>ItiPeriod</p2:EventName>
                    <p2:Color>Green</p2:Color>
                    <p2:Alpha>0.3</p2:Alpha>
                  </p2:ShadedAreaPlotter>
                </p2:ShadedAreaPlotters>
                <p2:PointPlotters>
                  <p2:PointPlotter>
                    <p2:EventName>LickLeft</p2:EventName>
                    <p2:Color>Red</p2:Color>
                    <p2:YPosition>0.9</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Down</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>LickRight</p2:EventName>
                    <p2:Color>Blue</p2:Color>
                    <p2:YPosition>0.1</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Up</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>IsRightTriggerQuickRetract</p2:EventName>
                    <p2:Color>DarkCyan</p2:Color>
                    <p2:YPosition>0.5</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Plus</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>DeliverSecondaryReinforcer</p2:EventName>
                    <p2:Color>Sienna</p2:Color>
                    <p2:YPosition>0.5</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Plus</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>WaterRight</p2:EventName>
                    <p2:Color>Blue</p2:Color>
                    <p2:YPosition>0.2</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Circle</p2:Marker>
                  </p2:PointPlotter>
                  <p2:PointPlotter>
                    <p2:EventName>WaterLft</p2:EventName>
                    <p2:Color>Red</p2:Color>
                    <p2:YPosition>0.8</p2:YPosition>
                    <p2:MarkerSize>6</p2:MarkerSize>
                    <p2:Marker>Circle</p2:Marker>
                  </p2:PointPlotter>
                </p2:PointPlotters>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasStream</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraPreviewVisualizer.bonsai">
              <FrameSubject>Camera</FrameSubject>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\MetadataVisualizer.bonsai">
              <FrameSubject>Metadata</FrameSubject>
              <StartExperimentSubject>StartExperimentShortcut</StartExperimentSubject>
              <EndExperimentSubject>EndExperiment</EndExperimentSubject>
              <UiHabituationTimeUpdate>UiHabituationTimeUpdate</UiHabituationTimeUpdate>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PreSessionVisualizer.bonsai">
              <FrameSubject>PreSession</FrameSubject>
              <UiKeepLeftOpne>UiKeepLeftOpen</UiKeepLeftOpne>
              <UiKeepRightOpen>UiKeepRightOpen</UiKeepRightOpen>
              <UiKeepBothOpen>UiKeepBothOpen</UiKeepBothOpen>
              <UiDrainLeft>UiDrainLeft</UiDrainLeft>
              <UiDrainRight>UiDrainRight</UiDrainRight>
              <UiDrainBoth>UiDrainBoth</UiDrainBoth>
              <UiManipulatorLeft>UiManipulatorLeft</UiManipulatorLeft>
              <UiManipulatorForwardLeft>UiManipulatorForwardLeft</UiManipulatorForwardLeft>
              <UiManipulatorForwardRight>UiManipulatorForwardRight</UiManipulatorForwardRight>
              <UiManipulatorUp>UiManipulatorUp</UiManipulatorUp>
              <UiManipulatorRight>UiManipulatorRight</UiManipulatorRight>
              <UiManipulatorBackLeft>UiManipulatorBackLeft</UiManipulatorBackLeft>
              <UiManipulatorBackRight>UiManipulatorBackRight</UiManipulatorBackRight>
              <UiManipulatorDown>UiManipulatorDown</UiManipulatorDown>
              <UiManipulatorStop>UiManipulatorStop</UiManipulatorStop>
              <UiManipulatorHome>UiManipulatorHome</UiManipulatorHome>
              <UiControlManipulator>UiManipulatorInitialize</UiControlManipulator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\InterSessionVisualizer.bonsai">
              <FrameSubject>InterSession</FrameSubject>
              <UiGiveLeft>UiGiveLeft</UiGiveLeft>
              <UiGiveRight>UiGiveRight</UiGiveRight>
              <UiMoveLeft>UiMoveLeft</UiMoveLeft>
              <UiMoveRight>UiMoveRight</UiMoveRight>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>